PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test_0904
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Routines
  Routine feedback
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Time Out
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  Routine trial
    TextComponent trial_fix
      color = black
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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    ImageComponent trial_image
      image [set every frame] = $filePath
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.5
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    KeyboardComponent trial_keyresp
      allowedKeys = 'v','n'
      correctAns = $response
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    ImageComponent trial_color
      image [set every repeat] = $colorPath
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.5
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  Routine instruction
    TextComponent instr_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent instr_keyresp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_routine
    TextComponent break_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BYE
    TextComponent BYE_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intr_reminder
Flow
  Routine instruction
  LoopInitiator episode_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = data\MixedCCL_1.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('episode', 'Low'), ('trial_id', 1), ('stimCat', 'LivLg'), ('stimId', 5), ('stimImage', 'LL__38'), ('filePath', './image/LL__38.jpg'), ('bkSwProb', 25), ('itSwProb', 50), ('trialType', 'repeat'), ('task', 'size'), ('color', 'red'), ('colorPath', './image/color/red.jpg'), ('response', 'v')]),
        OrderedDict([('episode', 'Low'), ('trial_id', 2), ('stimCat', 'LivLg'), ('stimId', 5), ('stimImage', 'LL__38'), ('filePath', './image/LL__38.jpg'), ('bkSwProb', 25), ('itSwProb', 50), ('trialType', 'switch'), ('task', 'animacy'), ('color', 'blue'), ('colorPath', './image/color/blue.jpg'), ('response', 'n')]),
        OrderedDict([('episode', 'Low'), ('trial_id', 3), ('stimCat', 'NLvSm'), ('stimId', 39), ('stimImage', 'NS__33'), ('filePath', './image/NS__33.jpg'), ('bkSwProb', 25), ('itSwProb', 50), ('trialType', 'repeat'), ('task', 'animacy'), ('color', 'blue'), ('colorPath', './image/color/blue.jpg'), ('response', 'v')]),
        OrderedDict([('episode', 'Low'), ('trial_id', 4), ('stimCat', 'LivLg'), ('stimId', 6), ('stimImage', 'LL__7'), ('filePath', './image/LL__7.jpg'), ('bkSwProb', 25), ('itSwProb', 0), ('trialType', 'repeat'), ('task', 'animacy'), ('color', 'blue'), ('colorPath', './image/color/blue.jpg'), ('response', 'n')])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
      Routine trial
      Routine feedback
    LoopTerminator trials
    Routine break_routine
  LoopTerminator episode_loop
  Routine BYE
