PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = StroopExperiment
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Routines
  Routine trial
    TextComponent target
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4.0
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      text:
        Any text

        including line breaks
    KeyboardComponent response
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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Flow
  Routine trial
